PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = myproject
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Routines
  Routine trial
    TextComponent fixtation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    TextComponent words
      letterHeight = 0.1
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
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    KeyboardComponent key_response
      allowedKeys = 'p','n','q'
      forceEndRoutine = True
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 1.0
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  Routine trial_color
    TextComponent fix_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    TextComponent word_2
      color [set every repeat] = $color_of_words
      contrast [set every repeat] = 1
      letterHeight = 0.1
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys = 'p','n','q'
      forceEndRoutine = True
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 1.0
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  Routine ending
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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      text:
        This is the end of the experiment.
        Thank you so much.

        Press ‘space’ to end.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine explanation
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Hello!

        Press “p” if the word has a positive meaning.
        Press “n” if the word has a negative meaning.
        Press “q” if the word has a neutral meaning.

        Press Space to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part1
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        PART 01

        press space to start.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_ex
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Let’s practise first.

        Press space to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        PART 02

        Press space to begin.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine explanation
  Routine trial_ex
  LoopInitiator practice01 loopType="TrialHandler"
    conditionsFile = /Users/toyofukuasuka/psychophysics/trial_words 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': 1, 'condition': 'positive', 'word': 'energetic', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 2, 'condition': 'positive', 'word': 'curious', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 3, 'condition': 'positive', 'word': 'trusting', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 4, 'condition': 'neutral', 'word': 'blender', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 5, 'condition': 'neutral', 'word': 'participating', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 6, 'condition': 'neutral', 'word': 'movement', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 7, 'condition': 'negative', 'word': 'busy', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': 8, 'condition': 'negative', 'word': 'ashamed', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': 9, 'condition': 'negative', 'word': 'sad', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': 10, 'condition': 'negative', 'word': 'sceptical', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': None, 'condition': None, 'word': None, 'response': None, 'color': None}]
    Routine trial
  LoopTerminator practice01
  Routine part1
  LoopInitiator trial_pos loopType="TrialHandler"
    conditionsFile = /Users/toyofukuasuka/psychophysics/01postive_neutral_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': 1, 'condition': 'positive', 'word': 'powerful', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 2, 'condition': 'positive', 'word': 'optimistic', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 3, 'condition': 'positive', 'word': 'interested', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 4, 'condition': 'positive', 'word': 'content', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 5, 'condition': 'positive', 'word': 'excited', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 6, 'condition': 'positive', 'word': 'intimate', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 7, 'condition': 'positive', 'word': 'loving', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 8, 'condition': 'positive', 'word': 'joyful', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 9, 'condition': 'positive', 'word': 'thankful', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 10, 'condition': 'positive', 'word': 'successful', 'response': "p'", 'color': (0, 100, 0)},
      {'Trial': 11, 'condition': 'neutral', 'word': 'sweter', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 12, 'condition': 'neutral', 'word': 'imaging', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 13, 'condition': 'neutral', 'word': 'wrapping', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 14, 'condition': 'neutral', 'word': 'sentense', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 15, 'condition': 'neutral', 'word': 'language', 'response': "q'", 'color': (0, 100, 0)}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
    Routine trial
  LoopTerminator trial_pos
  LoopInitiator trials_neg loopType="TrialHandler"
    conditionsFile = /Users/toyofukuasuka/psychophysics/01negative_neutral_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': 1, 'condition': 'neutral', 'word': 'design', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 2, 'condition': 'neutral', 'word': 'syllabus', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 3, 'condition': 'neutral', 'word': 'geography', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 4, 'condition': 'neutral', 'word': 'window', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 5, 'condition': 'neutral', 'word': 'stone', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 6, 'condition': 'neutral', 'word': 'joining', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 7, 'condition': 'neutral', 'word': 'running', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 8, 'condition': 'neutral', 'word': 'monotone', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 9, 'condition': 'neutral', 'word': 'formula', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 10, 'condition': 'neutral', 'word': 'letter', 'response': "q'", 'color': (0, 100, 0)},
      {'Trial': 11, 'condition': 'negative', 'word': 'depressed', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': 12, 'condition': 'negative', 'word': 'hurt', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': 13, 'condition': 'negative', 'word': 'lonely', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': 14, 'condition': 'negative', 'word': 'anxious', 'response': "n'", 'color': (0, 100, 0)},
      {'Trial': 15, 'condition': 'negative', 'word': 'bored', 'response': "n'", 'color': (0, 100, 0)}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
    Routine trial
  LoopTerminator trials_neg
  Routine part2
  LoopInitiator trial_col_pos loopType="TrialHandler"
    conditionsFile = /Users/toyofukuasuka/psychophysics/02postive_neutral_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': 1, 'condition': 'positive', 'word': 'proud', 'response': "p'", 'color_of_words': (0, 0, 100)},
      {'Trial': 2, 'condition': 'positive', 'word': 'glad', 'response': "p'", 'color_of_words': (0, 100, 0)},
      {'Trial': 3, 'condition': 'positive', 'word': 'happy', 'response': "p'", 'color_of_words': (100, 0, 0)},
      {'Trial': 4, 'condition': 'positive', 'word': 'playful', 'response': "p'", 'color_of_words': (0, 0, 100)},
      {'Trial': 5, 'condition': 'positive', 'word': 'amazed', 'response': "p'", 'color_of_words': (0, 100, 0)},
      {'Trial': 6, 'condition': 'positive', 'word': 'valued', 'response': "p'", 'color_of_words': (100, 0, 0)},
      {'Trial': 7, 'condition': 'positive', 'word': 'respected', 'response': "p'", 'color_of_words': (0, 0, 100)},
      {'Trial': 8, 'condition': 'positive', 'word': 'free', 'response': "p'", 'color_of_words': (0, 100, 0)},
      {'Trial': 9, 'condition': 'positive', 'word': 'joyful', 'response': "p'", 'color_of_words': (100, 0, 0)},
      {'Trial': 10, 'condition': 'positive', 'word': 'calm', 'response': "p'", 'color_of_words': (0, 0, 100)},
      {'Trial': 11, 'condition': 'neutral', 'word': 'language', 'response': "q'", 'color_of_words': (0, 100, 0)},
      {'Trial': 12, 'condition': 'neutral', 'word': 'condition', 'response': "q'", 'color_of_words': (100, 0, 0)},
      {'Trial': 13, 'condition': 'neutral', 'word': 'numbers', 'response': "q'", 'color_of_words': (0, 0, 100)},
      {'Trial': 14, 'condition': 'neutral', 'word': 'ceiling', 'response': "q'", 'color_of_words': (0, 100, 0)}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
    Routine trial_color
  LoopTerminator trial_col_pos
  LoopInitiator trial_col_neg loopType="TrialHandler"
    conditionsFile = /Users/toyofukuasuka/psychophysics/02negative_neutral_words .xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': 1, 'condition': 'neutral', 'word': 'design', 'response': "q'", 'color_of_words': (0, 0, 100)},
      {'Trial': 2, 'condition': 'neutral', 'word': 'syllabus', 'response': "q'", 'color_of_words': (0, 100, 0)},
      {'Trial': 3, 'condition': 'neutral', 'word': 'geography', 'response': "q'", 'color_of_words': (100, 0, 0)},
      {'Trial': 4, 'condition': 'neutral', 'word': 'vegetable', 'response': "q'", 'color_of_words': (0, 0, 100)},
      {'Trial': 5, 'condition': 'neutral', 'word': 'glasses', 'response': "q'", 'color_of_words': (0, 100, 0)},
      {'Trial': 6, 'condition': 'neutral', 'word': 'style', 'response': "q'", 'color_of_words': (100, 0, 0)},
      {'Trial': 7, 'condition': 'neutral', 'word': 'mapping', 'response': "q'", 'color_of_words': (0, 0, 100)},
      {'Trial': 8, 'condition': 'neutral', 'word': 'seventeen', 'response': "q'", 'color_of_words': (0, 100, 0)},
      {'Trial': 9, 'condition': 'neutral', 'word': 'photo', 'response': "q'", 'color_of_words': (100, 0, 0)},
      {'Trial': 10, 'condition': 'neutral', 'word': 'editing', 'response': "q'", 'color_of_words': (0, 0, 100)},
      {'Trial': 11, 'condition': 'negative', 'word': 'critical', 'response': "n'", 'color_of_words': (0, 100, 0)},
      {'Trial': 12, 'condition': 'negative', 'word': 'annoyed', 'response': "n'", 'color_of_words': (100, 0, 0)},
      {'Trial': 13, 'condition': 'negative', 'word': 'stressed', 'response': "n'", 'color_of_words': (0, 0, 100)},
      {'Trial': 14, 'condition': 'negative', 'word': 'guilty', 'response': "n'", 'color_of_words': (0, 100, 0)}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
    Routine trial_color
  LoopTerminator trial_col_neg
  Routine ending
